PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/acorn_img3.png', 'stimuli/airplane_img3.png', 'stimuli/anchor_img3.png', 'stimuli/angel_img3.png', 'stimuli/astronaut_img3.png', 'stimuli/backpack_img3.png', 'stimuli/ballerina_img3.png', 'stimuli/bat_img3.png', 'stimuli/beehive_img3.png', 'stimuli/book_img3.png', 'stimuli/cactus_img3.png', 'stimuli/cake_img3.png', 'stimuli/canoe_img3.png', 'stimuli/carousel_img3.png', 'stimuli/carrot_img3.png', 'stimuli/castle_img3.png', 'stimuli/church_img3.png', 'stimuli/clown_img3.png', 'stimuli/corn_img3.png', 'stimuli/crown_img3.png', 'stimuli/dress_img3.png', 'stimuli/fireplace_img3.png', 'stimuli/fishbowl_img3.png', 'stimuli/football_img3.png', 'stimuli/garbage can_img3.png', 'stimuli/gate_img3.png', 'stimuli/guitar_img3.png', 'stimuli/iron_img3.png', 'stimuli/key_img3.png', 'stimuli/ladybug_img3.png', 'stimuli/milk carton_img3.png', 'stimuli/monkey_img3.png', 'stimuli/mouse_img3.png', 'stimuli/NN_angel_img1.png', 'stimuli/NN_angel_img2.png', 'stimuli/NN_beehive_img1.png', 'stimuli/NN_beehive_img2.png', 'stimuli/NN_castle_img1.png', 'stimuli/NN_castle_img2.png', 'stimuli/NN_garbage can_img1.png', 'stimuli/NN_garbage can_img2.png', 'stimuli/NN_gate_img1.png', 'stimuli/NN_gate_img2.png', 'stimuli/NN_guitar_img1.png', 'stimuli/NN_guitar_img2.png', 'stimuli/NN_palm tree_img1.png', 'stimuli/NN_palm tree_img2.png', 'stimuli/NN_ring_img1.png', 'stimuli/NN_ring_img2.png', 'stimuli/NN_scissors_img1.png', 'stimuli/NN_scissors_img2.png', 'stimuli/NN_snake_img1.png', 'stimuli/NN_snake_img2.png', 'stimuli/NN_swing set_img1.png', 'stimuli/NN_swing set_img2.png', 'stimuli/NN_turkey_img1.png', 'stimuli/NN_turkey_img2.png', 'stimuli/NY_airplane_img1.png', 'stimuli/NY_airplane_img2.png', 'stimuli/NY_anchor_img1.png', 'stimuli/NY_anchor_img2.png', 'stimuli/NY_backpack_img1.png', 'stimuli/NY_backpack_img2.png', 'stimuli/NY_cactus_img1.png', 'stimuli/NY_cactus_img2.png', 'stimuli/NY_church_img1.png', 'stimuli/NY_church_img2.png', 'stimuli/NY_clown_img1.png', 'stimuli/NY_clown_img2.png', 'stimuli/NY_fishbowl_img1.png', 'stimuli/NY_fishbowl_img2.png', 'stimuli/NY_football_img1.png', 'stimuli/NY_football_img2.png', 'stimuli/NY_ladybug_img1.png', 'stimuli/NY_ladybug_img2.png', 'stimuli/NY_mouse_img1.png', 'stimuli/NY_mouse_img2.png', 'stimuli/NY_strawberry_img1.png', 'stimuli/NY_strawberry_img2.png', 'stimuli/NY_sunflower_img1.png', 'stimuli/NY_sunflower_img2.png', 'stimuli/palm tree_img3.png', 'stimuli/ring_img3.png', 'stimuli/rocket_img3.png', 'stimuli/sailboat_img3.png', 'stimuli/saw_img3.png', 'stimuli/scissors_img3.png', 'stimuli/snake_img3.png', 'stimuli/strawberry_img3.png', 'stimuli/sunflower_img3.png', 'stimuli/swing set_img3.png', 'stimuli/telephone_img3.png', 'stimuli/tent_img3.png', 'stimuli/turkey_img3.png', 'stimuli/washing machine_img3.png', 'stimuli/windmill_img3.png', 'stimuli/YN_acorn_img1.png', 'stimuli/YN_acorn_img2.png', 'stimuli/YN_astronaut_img1.png', 'stimuli/YN_astronaut_img2.png', 'stimuli/YN_bat_img1.png', 'stimuli/YN_bat_img2.png', 'stimuli/YN_canoe_img1.png', 'stimuli/YN_canoe_img2.png', 'stimuli/YN_carousel_img1.png', 'stimuli/YN_carousel_img2.png', 'stimuli/YN_dress_img1.png', 'stimuli/YN_dress_img2.png', 'stimuli/YN_iron_img1.png', 'stimuli/YN_iron_img2.png', 'stimuli/YN_monkey_img1.png', 'stimuli/YN_monkey_img2.png', 'stimuli/YN_sailboat_img1.png', 'stimuli/YN_sailboat_img2.png', 'stimuli/YN_saw_img1.png', 'stimuli/YN_saw_img2.png', 'stimuli/YN_telephone_img1.png', 'stimuli/YN_telephone_img2.png', 'stimuli/YN_washing machine_img1.png', 'stimuli/YN_washing machine_img2.png', 'stimuli/YY_ballerina_img1.png', 'stimuli/YY_ballerina_img2.png', 'stimuli/YY_book_img1.png', 'stimuli/YY_book_img2.png', 'stimuli/YY_cake_img1.png', 'stimuli/YY_cake_img2.png', 'stimuli/YY_carrot_img1.png', 'stimuli/YY_carrot_img2.png', 'stimuli/YY_corn_img1.png', 'stimuli/YY_corn_img2.png', 'stimuli/YY_crown_img1.png', 'stimuli/YY_crown_img2.png', 'stimuli/YY_fireplace_img1.png', 'stimuli/YY_fireplace_img2.png', 'stimuli/YY_key_img1.png', 'stimuli/YY_key_img2.png', 'stimuli/YY_milk carton_img1.png', 'stimuli/YY_milk carton_img2.png', 'stimuli/YY_rocket_img1.png', 'stimuli/YY_rocket_img2.png', 'stimuli/YY_tent_img1.png', 'stimuli/YY_tent_img2.png', 'stimuli/YY_windmill_img1.png', 'stimuli/YY_windmill_img2.png', 'BADEImgConditions_Eng.csv', 'BADEImgConditions_Fr.csv', 'BADEImgConditions_practice_Eng.csv', 'BADEImgConditions_practice_Fr.csv', 'ballet slippers_img1.png', 'ballet slippers_img2.png', 'ballet slippers_img3.png', 'bundle.min.js', 'button.png']
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1680, 1050]
  color = $[1.000,1.000,1.000]
  expName = BADE_builder
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine instr2
    CodeComponent code_i2
      Code Type = Both
      Begin JS Routine:
        kb.clock.reset();
        kb.start();
        kb.clearEvents();

        img2start = false;
        frameNstart = 0;
        img2_i2.setOpacity(0);
        slider_is_initialized = false;

        //Adapt the color and size of the marker to the slider
        col = new util.Color('black');

        //Change the text according to the selected language, function SetTxtInstr2()
        function SetTxtInstr2(){
            if (english){
                text1_i2.text = "BALLET SLIPPERS";
                instr_text2.text = "Once you respond, more of the picture will begin to appear. Reconsider the rating you made. If you wish to keep your previous rating, you must click again in the same place on the scale. You may change your rating as much or as little as you like. Once you make your second response, you will see the full picture and the correct word.\n \n You will now complete several practice trials before beginning the experiment. Try to respond as quickly as you can.\n \n When you are comfortable, click on \"PRACTICE\" to move on.";
                label1_i2.text = "100% YES";
                label2_i2.text = "100% NO";
                txt_next_i2.text = "PRACTICE";
            }
            else{
                text1_i2.text = "CHAUSSONS DE BALLET";
                instr_text2.text = "Une fois que vous avez répondu, plus de détails de l’image commenceront à apparaître. Reconsidérez l’évaluation que vous avez faite. Si vous souhaitez conserver votre évaluation précédente, vous devez cliquer de nouveau au même endroit sur l’échelle. Vous pouvez changer votre évaluation autant que vous le voulez. Une fois votre deuxième évaluation faite, vous verrez l’image entière et le mot correct.\n \n Vous allez maintenant compléter plusieurs essais de pratique, avant de commencer l’exercice. Essayez de répondre le plus vite que vous pouvez.\n \n Quand vous serez prêt, cliquez sur \"S’ENTRAÎNER\" pour commencer.";
                label1_i2.text = "100% OUI";
                label2_i2.text = "100% NON";
                txt_next_i2.text = "S’ENTRAÎNER";
            }
        }

        SetTxtInstr2();
      Begin Routine:
        img2start = False
        frameNstart = 0
        img2_i2.setOpacity(0)
        slider_is_initialized = False

        #Adapt the color and size of the marker to the slider
        col = 'black'

        #Change the text according to the selected language, function SetTxtInstr()
        if english:
            text1_i2.text = "BALLET SLIPPERS"
            instr_text2.text = "Once you respond, more of the picture will begin to appear. Reconsider the rating you made. If you wish to keep your previous rating, you must click again in the same place on the scale. You may change your rating as much or as little as you like. Once you make your second response, you will see the full picture and the correct word.\n \n You will now complete several practice trials before beginning the experiment. Try to respond as quickly as you can.\n \n When you are comfortable, click on \"PRACTICE\" to move on."
            label1_i2.text = "100% YES"
            label2_i2.text = "100% NO"
            txt_next_i2.text = "PRACTICE"
        else:
            text1_i2.text = "CHAUSSONS DE BALLET"
            instr_text2.text = "Une fois que vous avez répondu, plus de détails de l’image commenceront à apparaître. Reconsidérez l’évaluation que vous avez faite. Si vous souhaitez conserver votre évaluation précédente, vous devez cliquer de nouveau au même endroit sur l’échelle. Vous pouvez changer votre évaluation autant que vous le voulez. Une fois votre deuxième évaluation faite, vous verrez l’image entière et le mot correct.\n \n Vous allez maintenant compléter plusieurs essais de pratique, avant de commencer l’exercice. Essayez de répondre le plus vite que vous pouvez.\n \n Quand vous serez prêt, cliquez sur \"S’ENTRAÎNER\" pour commencer."
            label1_i2.text = "100% OUI"
            label2_i2.text = "100% NON"
            txt_next_i2.text = "S’ENTRAÎNER"
      Each Frame:
        keys = event.getKeys()

        #Change the color of highlighed rect
        if next_i2.contains(mouse_i2):
            next_i2.opacity=0.99
            txt_next_i2.opacity=2
        else:
            next_i2.opacity=0.73
            txt_next_i2.opacity=0.73

        # Initialize slider1 marker at 0 position
        if slider_is_initialized == False and img1_i2.status == STARTED:
            try:
                slider_i2.marker.setColor(col, colorSpace='rgb')
                slider_i2.marker.size = (0.05, 0.05)
                slider_i2.markerPos = slider_i.markerPos
                slider_i2._onChange(True)()
            except:
                print("An exception while initializing slider occurred")
            slider_i2.opacity=1
            slider_is_initialized  = True

        # Move using arrow keys
        if slider_is_initialized and 'up' in keys:
            slider_i2.markerPos += 10
            slider_i2.recordRating(slider_i2.markerPos)
        elif slider_is_initialized and 'down' in keys:
            slider_i2.markerPos -= 10
            slider_i2.recordRating(slider_i2.markerPos)

        if t>=0.02 and img2_i2.status == NOT_STARTED:
            img2start = True
      Each JS Frame:
        //Change the color of highlighed rect
        function HighlightRect(rec1, txt_rec1, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
        }

        HighlightRect(next_i2, txt_next_i2, mouse_i2);

        //Initialise the slider marker..
        function InitializeSlider(){
            try {
                    slider_i2._skin.STANDARD.MARKER_COLOR = col;
                    slider_i2._skin.MARKER_SIZE = [0.05, 0.05];
                    slider_i2.markerPos = slider_i.markerPos;
                    slider_i2._onChange(true)();
            } catch (err) {}
        }

        //Initialize slider1 marker at 0 position
        if (!slider_is_initialized && img1_i2.status === STARTED){
            InitializeSlider();
            slider_i2.setOpacity(1);
            slider_is_initialized  = true;
        }

        function movingSliderWArrowKeys(mySlider){
            let keys = kb.getKeys({keyList: ["up", "down"], waitRelease: false, clear: true});
            let key_name = "";
            let key_duration = "";

            if (keys.length <= 0) return;

            key_name = keys[0].name;
            key_duration = keys[0].duration;

            if (slider_is_initialized && key_name === "up" && key_duration == undefined){
                mySlider.markerPos += 10;
                mySlider.recordRating(mySlider.markerPos);
            }

            else if (slider_is_initialized && key_name === "down" && key_duration == undefined){
                mySlider.markerPos -= 10;
                mySlider.recordRating(mySlider.markerPos);
            }
        }

        movingSliderWArrowKeys(slider_i2);

        if ((((t >= 0.2) && (img2_i2.status === NOT_STARTED)))) {
            img2start = true;
        }
      End JS Routine:
        img1_i2.setOpacity(0);
        kb.clock.reset();
        kb.stop();
        kb.clearEvents();
      End Routine:
        img1_i2.setOpacity(0)
    ImageComponent img1_i2
      image = ballet slippers_img1.png
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.4, 0.4)
      startEstim = 0
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent img2_i2
      image = ballet slippers_img2.png
      opacity [set every frame] = (frameN)/600
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.4, 0.4)
      startEstim = 0.2
      startVal [condition] = $img2start == 1
      texture resolution = 512
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    TextComponent text1_i2
      color = $[-1,-1,-1]
      letterHeight = 0.03
      saveStartStop = False
      startEstim = 0
      startVal [frame N] = 0.0
      text = BALLET SLIPPERS
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    SliderComponent slider_i2
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.3,0.25)
      saveStartStop = False
      size = (0.05, 0.35)
      startEstim = 0
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (-100, 0, 100)
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    TextComponent instr_text2
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos = (0, -0.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Once you respond, more of the picture will begin to appear. Reconsider the rating you made. You may change your rating as much or as little as you like. Once you make your second response, you will see the full picture and the correct word.

        You will now complete several practice trials before beginning the experiment. Try to respond as quickly as you can.

        When you are comfortable, click on “next” to move on.
    TextComponent label1_i2
      color = $[-1,-1,-1]
      letterHeight = 0.035
      pos = (0.3, 0.462)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 100% YES
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    TextComponent label2_i2
      color = $[-1,-1,-1]
      letterHeight = 0.035
      pos = (0.3, 0.038)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 100% NO
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    ImageComponent next_i2
      image = button.png
      opacity = 0.73
      pos = (0, -0.455)
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent txt_next_i2
      color = $[-1,-1,-1]
      letterHeight = 0.023
      opacity = 0.73
      pos [set every frame] = next_i2.pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NEXT
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    MouseComponent mouse_i2
      clickable = next_i2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine instr
    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;

        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
      Begin JS Routine:
        kb.clock.reset();
        kb.start();
        kb.clearEvents();

        img1start = false;
        img1_i.setOpacity(0);

         slider_is_initialized = false;

        //Adapt the color and size of the marker to the slider
        col = new util.Color('black');

        //Change the text according to the selected language, function SetTxtInstr()
        function SetTxtInstr(){
            if (english){
                text1_i.text = "BALLET SLIPPERS";
                instr_text1.text = "\nIn this task, you will be asked to identify pictures. You will be shown a picture gradually with a word listed below it, just like in the example above. Your job is to rate whether you think the word accurately describes what the full picture will be.\n \n Practice using your mouse or touchpad to select your rating by clicking or dragging the slider up and down the scale. You can make your rating at any point along the scale, depending on how confident you are in your response.\n \n When you are comfortable, click on \"NEXT\" to move on.";
                label1_i.text = "100% YES";
                label2_i.text = "100% NO";
                txt_next_i.text = "NEXT";
            }
            else{
                text1_i.text = "CHAUSSONS DE BALLET";
                instr_text1.text = "Dans cette tâche, vous devrez identifier des images. Vous allez voir graduellement une image, avec un mot écrit en-dessous. Évaluez si vous croyez que le mot décrit de manière adéquate l’image entière.\n \n Vous allez utiliser la souris ou le pavé tactile pour évaluer. Cliquez sur le bouton gauche sur l'échelle ou appuyez et maintenez le bouton pour déplacer le curseur vers oui ou non. Vous pouvez faire vos évaluations à n’importe quel endroit sur l’échelle, dépendamment à quel point vous êtes confiant de votre réponse.\n \n Quand vous serez prêt, cliquez sur \"SUIVANT\" pour commencer.";
                label1_i.text = "100% OUI";
                label2_i.text = "100% NON";
                txt_next_i.text = "SUIVANT";
            }
        }

        SetTxtInstr();
      Begin Routine:
        img1start = False
        img1_i.opacity = 0

        slider_is_initialized = False

        #Adapt the color and size of the marker to the slider
        col = 'black'

        #Change the text according to the selected language, function SetTxtInstr()
        if english:
            text1_i.text = "BALLET SLIPPERS"
            instr_text1.text = "\nIn this task, you will be asked to identify pictures. You will be shown a picture gradually with a word listed below it, just like in the example above. Your job is to rate whether you think the word accurately describes what the full picture will be.\n \n Practice using your mouse or touchpad to select your rating by clicking or dragging the slider up and down the scale. You can make your rating at any point along the scale, depending on how confident you are in your response.\n \n When you are comfortable, click on \"NEXT\" to move on."
            label1_i.text = "100% YES"
            label2_i.text = "100% NO"
            txt_next_i.text = "NEXT"
        else:
            text1_i.text = "CHAUSSONS DE BALLET"
            instr_text1.text = "Dans cette tâche, vous devrez identifier des images. Vous allez voir graduellement une image, avec un mot écrit en-dessous. Évaluez si vous croyez que le mot décrit de manière adéquate l’image entière.\n \n Vous allez utiliser la souris ou le pavé tactile pour évaluer. Cliquez sur le bouton gauche sur l'échelle ou appuyez et maintenez le bouton pour déplacer le curseur vers oui ou non. Vous pouvez faire vos évaluations à n’importe quel endroit sur l’échelle, dépendamment à quel point vous êtes confiant de votre réponse.\n \n Quand vous serez prêt, cliquez sur \"SUIVANT\" pour commencer."
            label1_i.text = "100% OUI"
            label2_i.text = "100% NON"
            txt_next_i.text = "SUIVANT"
      Each Frame:
        keys = event.getKeys()

        #Change the color of highlighed rect
        if next_i.contains(mouse_i):
            next_i.opacity = 0.99
            txt_next_i.opacity = 2
        else:
            next_i.opacity = 0.73
            txt_next_i.opacity = 0.73

        # Initialize slider1 marker at 0 position
        if slider_is_initialized == False and img1_i.status == STARTED:
            try:
                slider_i.marker.setColor(col, colorSpace='rgb')
                slider_i.marker.size = (0.05, 0.05)
                slider_i.markerPos = 0
                slider_i._onChange(True)()
            except:
                print("An exception while initializing slider occurred")
            slider_i.opacity = 1
            slider_is_initialized  = True

        # Moving slider using arrowKeys
        if slider_is_initialized and 'up' in keys:
            slider_i.markerPos += 10
            slider_i.recordRating(slider_i.markerPos)
        elif slider_is_initialized and 'down' in keys:
            slider_i.markerPos -= 10
            slider_i.recordRating(slider_i.markerPos)

        if t>=0.02 and img1_i.status == NOT_STARTED:
            img1start = True
      Each JS Frame:
        //Change the color of highlighed rect
        function HighlightRect(rec1, txt_rec1, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
        }

        HighlightRect(next_i, txt_next_i, mouse_i);

        //Initialise the slider marker..
        function InitializeSlider(){
            try {
                    slider_i._skin.STANDARD.MARKER_COLOR = col;
                    slider_i._skin.MARKER_SIZE = [0.05, 0.05];
                    slider_i.markerPos = 0;
                    slider_i._onChange(true)();
            } catch (err) {}
        }

        //Initialize slider1 marker at 0 position
        if (!slider_is_initialized && img1_i.status === STARTED){
            InitializeSlider();
            slider_i.setOpacity(1);
            slider_is_initialized  = true;
        }

        function movingSliderWArrowKeys(mySlider){
            let keys = kb.getKeys({keyList: ["up", "down"], waitRelease: false, clear: true});
            let key_name = "";
            let key_duration = "";

            if (keys.length <= 0) return;

            key_name = keys[0].name;
            key_duration = keys[0].duration;

            if (slider_is_initialized && key_name === "up" && key_duration == undefined){
                mySlider.markerPos += 10;
                mySlider.recordRating(mySlider.markerPos);
            }

            else if (slider_is_initialized && key_name === "down" && key_duration == undefined){
                mySlider.markerPos -= 10;
                mySlider.recordRating(mySlider.markerPos);
            }
        }

        movingSliderWArrowKeys(slider_i);

        if ((((t >= 0.02) && (img1_i.status === NOT_STARTED)))) {
            img1start = true;
        }
      End JS Routine:
        kb.clock.reset();
        kb.stop();
        kb.clearEvents();
    ImageComponent img1_i
      image = ballet slippers_img1.png
      opacity [set every frame] = (frameN)/300
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.4, 0.4)
      startEstim = 0.02
      startVal [condition] = $img1start == 1
      texture resolution = 512
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    TextComponent text1_i
      color = $[-1,-1,-1]
      letterHeight = 0.03
      saveStartStop = False
      startEstim = 0
      startVal [frame N] = 0.0
      text = BALLET SLIPPERS
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    SliderComponent slider_i
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.3,0.25)
      saveStartStop = False
      size = (0.05, 0.35)
      startEstim = 0
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (-100, 0, 100)
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    TextComponent instr_text1
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos = (0, -0.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be asked to identify pictures. You will be shown a picture gradually with a word listed below it, just like in the example above. Your job is to rate whether you think the word accurately describes what the full picture will be.

        Practice using your mouse to select your rating by clicking or dragging the slider up and down the scale. You can make your rating at any point along the scale, depending on how confident you are in your response.

        When you are comfortable, click on “next” to move on.
    TextComponent label1_i
      color = $[-1,-1,-1]
      letterHeight = 0.035
      pos = (0.3, 0.462)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 100% YES
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    TextComponent label2_i
      color = $[-1,-1,-1]
      letterHeight = 0.035
      pos = (0.3, 0.038)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 100% NO
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    ImageComponent next_i
      image = button.png
      opacity = 0.73
      pos = (0, -0.469)
      saveStartStop = False
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent txt_next_i
      color = $[-1,-1,-1]
      letterHeight = 0.023
      opacity = 0.73
      pos [set every repeat] = next_i.pos
      startVal [time (s)] = 0.0
      text = NEXT
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    MouseComponent mouse_i
      clickable = next_i
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine practice
    CodeComponent code_pr
      Code Type = Both
      Begin JS Routine:
        kb.clock.reset();
        kb.start();
        kb.clearEvents();

        img2start = false;
        img3start = false;
        img1stop = false;
        image_1pr.setOpacity(0);
        image_2pr.setOpacity(0);
        startingPos1 = true;
        startingPos2 = true;
        //Adapt the color and size of the marker to the slider
        col = new util.Color('black');

        //Display rating
        rating_val_pr.setAlignHoriz('right');
        preview_pos = [0.613, 0];
        rating_val_pr.setPos(preview_pos);

        //Sliders
        slider1_is_initialized = false;
        slider2_is_initialized = false;

        slider_pr.lastrating = "";

        txtScoreY = "";
        txtScoreN = "";
        //opacity timers
        timer1 = new util.Clock();
        timer2 = new util.Clock();
        opacity1 = 0;
        opacity2 = 0;

        //Change the text according to the selected language, function SetTxtPractice()
        function SetTxtPractice(){
            if (english){
                label1_pr.text = "100% YES";
                label2_pr.text = "100% NO";
                txtScoreY = "% YES";
                txtScoreN = "% NO";
                //rate_instr_pr.text = "Select your rating";
            }
            else{
                label1_pr.text = "100% OUI";
                label2_pr.text = "100% NON";
                txtScoreY = "% OUI";
                txtScoreN = "% NON";
                //rate_instr_pr.text = "Choisissez votre note";
            }
        }
        SetTxtPractice();
      Begin Routine:
        img2start = False
        img3start = False
        img1stop = False
        image_1pr.opacity = 0
        image_2pr.opacity = 0
        startingPos1 = True
        startingPos2 = True

        #Adapt the color and size of the marker to the slider
        col = 'black'

        #Show rating
        preview_pos = (0.613, 0)
        rating_val_pr.setPos(preview_pos)
        rating_val_pr.alignHoriz='right'
        # the position of the rating value differs using Python (probably because of the alignHoriz function), so we are fixing it

        #Sliders
        slider1_is_initialized = False
        slider2_is_initialized = False

        slider_pr.lastrating = ""

        #Show scores
        txtScoreY = ""
        txtScoreN = ""

        #opacity timers
        timer1 = core.Clock()
        timer2 = core.Clock()
        opacity1 = 0
        opacity2 = 0

        #Change the text according to the selected language, function SetTxtInstr()
        if english:
            label1_pr.text = "100% YES"
            label2_pr.text = "100% NO"
            txtScoreY = "% YES"
            txtScoreN = "% NO"
        else:
            label1_pr.text = "100% OUI"
            label2_pr.text = "100% NON"
            txtScoreY = "% OUI"
            txtScoreN = "% NON"
      Each Frame:
        # Initialize slider1 marker at 0 position
        if slider1_is_initialized == False and image_1pr.status == STARTED:
            try:
                slider_pr.marker.setColor(col, colorSpace='rgb')
                slider_pr.marker.size = (0.05, 0.05)
                slider_pr.markerPos = 0
                slider1_is_initialized = True
                slider_pr._onChange(True)()
                slider_pr._setupSlider()
                timer1.add(5)
            except:
                print("An exception while initializing slider 1 occurred")
        # Initialize slider2 marker at slider1marker position
        if slider2_is_initialized == False and image_2pr.status == STARTED:
            slider_pr2.markerPos = slider_pr.markerPos
            try:
                slider_pr2.marker.setColor(col, colorSpace='rgb')
                slider_pr2.marker.size = (0.05, 0.05)
                slider2_is_initialized = True
                slider_pr2._onChange(True)()
                slider_pr2._setupSlider()
                slider_pr2.draw()
                slider_pr2.setAutoDraw(True)
            except:
                print("An exception while initializing slider 2 occurred")


        # Compute opacities
        if opacity1<1 and not img2start:
            opacity1 = (timer1.getTime())/5
        elif opacity2<1 and img2start:
            opacity2 = (timer2.getTime())/5

        # Detect if we moved the marker
        if not img2start and slider_pr.marker.contains(mouse_pr) and mouse_pr.getPressed()[0] == True:
            startingPos1 = False

        # Get keys
        keys = event.getKeys()

        # Moving slider using arrowKeys
        if not img2start and 'up' in keys:
            slider_pr.markerPos += 10
            slider_pr.recordRating(slider_pr.markerPos)
            startingPos1 = False
        elif not img2start and 'down' in keys:
            slider_pr.markerPos -= 10
            slider_pr.recordRating(slider_pr.markerPos)
            startingPos1 = False

        #print rating next to slider before releasing the mouse
        if not img2start and not startingPos1:
            #display rating value
            val = round(slider_pr.markerPos)
            if val>=0:
                rating_val_pr.text = str(int(abs(val)))+txtScoreY
            else:
                rating_val_pr.text = str(int(abs(val)))+txtScoreN

        # Detect if we moved the marker
        if img2start and slider_pr2.marker.contains(mouse_pr) and mouse_pr.getPressed()[0] == True:
            startingPos2 = False
            img1stop = True

        # Moving slider using arrowKeys
        if img2start and 'up' in keys:
            slider_pr2.markerPos += 10
            slider_pr2.recordRating(slider_pr2.markerPos)
            startingPos2 = False
            img1stop = True
        elif img2start and 'down' in keys:
            slider_pr2.markerPos -= 10
            slider_pr2.recordRating(slider_pr2.markerPos)
            startingPos2 = False
            img1stop = True

        #print rating next to slider before releasing the mouse
        if img2start and not startingPos2:
            #display rating value
            val = round(slider_pr2.markerPos)
            if val>=0:
                rating_val_pr.text = str(int(abs(val)))+txtScoreY
            else:
                rating_val_pr.text = str(int(abs(val)))+txtScoreN

        #Start img2 and img3
        if index > 0:
            if t >= 5.0 and image_2pr.status == NOT_STARTED and image_1pr.opacity >= 1:
                img2start = True
                slider_pr2.reset()
                rating_val_pr.text = ""
                slider_pr.lastrating = slider_pr.markerPos
                timer2.reset()
            elif t >= 10.0 and image_3pr.status == NOT_STARTED and image_2pr.opacity >= 1:
                img3start = True
                img1stop = True
        elif slider_pr.getRating()!=None and image_2pr.status == NOT_STARTED and image_1pr.opacity >= 1:
            img2start = True
            slider_pr2.reset()
            slider_pr.lastrating = slider_pr.markerPos
            timer2.reset()
            rating_val_pr.text = ""
        elif slider_pr2.getRating()!=None and image_3pr.status == NOT_STARTED and image_2pr.opacity >= 1:
            img3start = True
            img1stop = True
      Each JS Frame:
        function InitializeSlider1(){
             try {
                slider_pr._skin.STANDARD.MARKER_COLOR = col;
                slider_pr._skin.MARKER_SIZE = [0.05, 0.05];
                slider_pr.markerPos = 0;
                slider_pr._onChange(true)();
                //slider._setupSlider();
            } catch (err) {}
            slider1_is_initialized  = true;
        }

        //Initialize slider 2
        function InitializeSlider2(){
            try {
                slider_pr2._skin.STANDARD.MARKER_COLOR = col;
                slider_pr2._skin.MARKER_SIZE = [0.05, 0.05];
                slider_pr2._onChange(true)();
                //slider_pr2._setupSlider();
                slider_pr2.draw();
                slider_pr2.setAutoDraw(true);
            } catch (err) {}
            slider2_is_initialized  = true;
        }

        //Initialize slider1 marker at 0 position
        if (!slider1_is_initialized && image_1pr.status === STARTED){
            InitializeSlider1();
        }

        //Initialize slider2 marker at slider1 marker position
        if (!slider2_is_initialized && image_2pr.status === STARTED){
            slider_pr2.markerPos = slider_pr.lastrating;
            InitializeSlider2();
        }

        // Compute opacities
        if(opacity1<1 && !img2start){
            opacity1 = (timer1.getTime())/5;
        }
        else if(opacity2<1 && img2start){
            opacity2 = (timer2.getTime())/5;
        }

        //Detect if we moved the marker using mouse position
        if (startingPos1 && !img2start && mouse_pr.getPressed()[0] === 1 && mouse_pr.getPos()[0] >= 0.475 && mouse_pr.getPos()[0] <= 0.525 && mouse_pr.getPos()[1] >= -0.25 && mouse_pr.getPos()[1] <= 0.25){
            startingPos1 = false;
        }

        // Get keys
        let keys = kb.getKeys({keyList: ["up", "down"], waitRelease: false, clear: true});
        let key_name = "";
        let key_duration = "";

        function movingSlider1WArrowKeys(mySlider){
            if (!img2start && key_name === "up" && key_duration == undefined){
                mySlider.markerPos += 10;
                mySlider.recordRating(mySlider.markerPos);
                startingPos1 = false;
            }

            else if (!img2start && key_name === "down" && key_duration == undefined){
                mySlider.markerPos -= 10;
                mySlider.recordRating(mySlider.markerPos);
                startingPos1 = false;
            }
        }

        if (keys.length > 0){
            key_name = keys[0].name;
            key_duration = keys[0].duration;
            movingSlider1WArrowKeys(slider_pr);
        }

        // print rating next to slider before releasing the mouse
        if (!img2start && !startingPos1) {
            // display rating value
            val = Math.round(slider_pr.markerPos)
            rating_val_pr.text = val >= 0 ? Math.abs(val)+txtScoreY : Math.abs(val)+txtScoreN;
        }

        if (startingPos2 && img2start && mouse_pr.getPressed()[0] === 1 && mouse_pr.getPos()[0] >= 0.475 && mouse_pr.getPos()[0] <= 0.525 && mouse_pr.getPos()[1] >= -0.25 && mouse_pr.getPos()[1] <= 0.25){
            startingPos2 = false;
            img1stop = true;
        }

        function movingSlider2WArrowKeys(mySlider){
            if (img2start && key_name === "up" && key_duration == undefined){
                mySlider.markerPos += 10;
                mySlider.recordRating(mySlider.markerPos);
                startingPos2 = false;
                img1stop = true;
            }

            else if (img2start && key_name === "down" && key_duration == undefined){
                mySlider.markerPos -= 10;
                mySlider.recordRating(mySlider.markerPos);
                startingPos2 = false;
                img1stop = true;
            }
        }

        if (keys.length > 0){
            key_name = keys[0].name;
            key_duration = keys[0].duration;
            movingSlider2WArrowKeys(slider_pr2);
        }

        //Save rating of slider_pr on img2
        if (img2start && !startingPos2) {
            // display rating value
            val = Math.round(slider_pr2.markerPos)
            rating_val_pr.text = val >= 0 ? Math.abs(val)+txtScoreY : Math.abs(val)+txtScoreN;
        }

        //Start img2 and img3
        if (index > 0) {
            if (t >= 5.0 && image_2pr.status === NOT_STARTED && image_1pr.opacity >= 1) {
                img2start = true;
                //slider_pr2.reset();
                slider_pr.lastrating = slider_pr.markerPos;
                timer2.reset();
                rating_val_pr.text = "";
            } else {
                if (t >= 10.0 && image_3pr.status === NOT_STARTED && image_2pr.opacity >= 1) {
                    img3start = true;
                    img1stop = true;
                }
            }
        } else {
            if (slider_pr.getRating() !== undefined && image_2pr.status === NOT_STARTED && image_1pr.opacity >= 1) {
                img2start = true;
                //slider_pr2.reset();
                slider_pr.lastrating = slider_pr.markerPos;
                timer2.reset();
                rating_val_pr.text = "";
            }
            if (slider_pr2.getRating() !== undefined && image_3pr.status === NOT_STARTED && image_2pr.opacity >= 1) {
                img3start = true;
                img1stop = true;
            }
        }
      End JS Routine:
        kb.clock.reset();
        kb.stop();
        kb.clearEvents();
    TextComponent text_1pr
      color = $[-1,-1,-1]
      durationEstim = 5
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [condition] = $img2start == 1
      text [set every repeat] = $txt_1
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    TextComponent text_2pr
      color = $[-1,-1,-1]
      durationEstim = 5
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startEstim = 5
      startVal [condition] = $img2start == 1
      stopVal [condition] = $img3start == 1
      text [set every repeat] = $txt_2
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    TextComponent text_3pr
      color = black
      durationEstim = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      startEstim = 10
      startVal [condition] = $img3start == 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $txt_3
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    ImageComponent image_1pr
      image [set every repeat] = $img_1
      interpolate = nearest
      opacity [set every frame] = opacity1
      size = (0.6, 0.6)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
      texture resolution = 512
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    ImageComponent image_2pr
      durationEstim = 6
      image [set every repeat] = $img_2
      interpolate = nearest
      opacity [set every frame] = opacity2
      size = (0.6, 0.6)
      startEstim = 5
      startVal [condition] = $img2start == 1
      stopVal [condition] = $img3start == 1
      texture resolution = 512
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    ImageComponent image_3pr
      durationEstim = 1
      image [set every repeat] = $img_3
      interpolate = nearest
      size = (0.6, 0.6)
      startEstim = 10
      startVal [condition] = $img3start == 1
      stopVal [duration (s)] = 1
      texture resolution = 512
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    SliderComponent slider_pr
      borderColor = black
      color = black
      durationEstim = 5
      fillColor = black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.5,0)
      size = (0.05, 0.45)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [condition] = $img1stop == 1
      storeHistory = True
      styles = ['rating']
      ticks = (-100, 0, 100)
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    SliderComponent slider_pr2
      borderColor = black
      color = black
      durationEstim = 5
      fillColor = black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.5,0)
      size = (0.05, 0.45)
      startEstim = 5
      startVal [condition] = $img2start == 1
      stopVal [condition] = $img3start == 1
      storeHistory = True
      styles = ['rating']
      ticks = (-100, 0, 100)
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    TextComponent label1_pr
      color = $[-1,-1,-1]
      durationEstim = 10
      letterHeight = 0.035
      pos = (0.5, 0.266)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
      text = 100% YES
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    TextComponent label2_pr
      color = $[-1,-1,-1]
      durationEstim = 10
      letterHeight = 0.035
      pos = (0.5, -0.266)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
      text = 100% NO
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    TextComponent rating_val_pr
      color = $[-1,-1,-1]
      durationEstim = 10
      letterHeight = 0.035
      pos [set every repeat] = preview_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
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    MouseComponent mouse_pr
      clickable = slider_pr, slider_pr2
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
      timeRelativeTo = routine
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  Routine trial
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        nbRating = float("inf")
        currentTrial = 1
      Begin JS Experiment:
        nbRating = Number.POSITIVE_INFINITY;

        // Save additionals data later
        var condition_type, response_condition, degree_change;
        currentTrial = 1;
      Begin JS Routine:
        kb.clock.reset();
        kb.start();
        kb.clearEvents();

        img2start = false;
        img3start = false;
        img1stop = false;
        image_1.setOpacity(0);
        image_2.setOpacity(0);
        startingPos1 = true;
        startingPos2 = true;
        //Adapt the color and size of the marker to the slider
        col = new util.Color('black');

        //Display rating
        rating_val.setAlignHoriz('right');
        preview_pos = [0.613, 0];
        rating_val.setPos(preview_pos);

        //Sliders
        slider1_is_initialized = false;
        slider2_is_initialized = false;

        slider.lastrating = "";

        txtScoreY = "";
        txtScoreN = "";
        //opacity timers
        timer1 = new util.Clock();
        timer2 = new util.Clock();
        opacity1 = 0;
        opacity2 = 0;

        //Change the text according to the selected language, function SetTxtPractice()
        function SetTxtPractice(){
            if (english){
                label1.text = "100% YES";
                label2.text = "100% NO";
                txtScoreY = "% YES";
                txtScoreN = "% NO";
                //rate_instr_pr.text = "Select your rating";
            }
            else{
                label1.text = "100% OUI";
                label2.text = "100% NON";
                txtScoreY = "% OUI";
                txtScoreN = "% NON";
                //rate_instr_pr.text = "Choisissez votre note";
            }
        }
        SetTxtPractice();
      Begin Routine:
        img2start = False
        img3start = False
        img1stop = False
        image_1.opacity = 0
        image_2.opacity = 0
        startingPos1 = True
        startingPos2 = True

        #Adapt the color and size of the marker to the slider
        col = 'black'

        #Show rating
        preview_pos = (0.613, 0)
        rating_val.setPos(preview_pos)
        rating_val.alignHoriz='right'
        # the position of the rating value differs using Python (probably because of the alignHoriz function), so we are fixing it

        #Sliders
        slider1_is_initialized = False
        slider2_is_initialized = False

        slider.lastrating = ""

        #Show scores
        txtScoreY = ""
        txtScoreN = ""

        #opacity timers
        timer1 = core.Clock()
        timer2 = core.Clock()
        opacity1 = 0
        opacity2 = 0

        #Change the text according to the selected language, function SetTxtInstr()
        if english:
            label1.text = "100% YES"
            label2.text = "100% NO"
            txtScoreY = "% YES"
            txtScoreN = "% NO"
        else:
            label1.text = "100% OUI"
            label2.text = "100% NON"
            txtScoreY = "% OUI"
            txtScoreN = "% NON"
      Each Frame:
        # Initialize slider1 marker at 0 position
        if slider1_is_initialized == False and image_1.status == STARTED:
            try:
                slider.marker.setColor(col, colorSpace='rgb')
                slider.marker.size = (0.05, 0.05)
                slider.markerPos = 0
                slider1_is_initialized = True
                slider._onChange(True)()
                slider._setupSlider()
                timer1.add(5)
            except:
                print("An exception while initializing slider 1 occurred")
        # Initialize slider2 marker at slider1marker position
        if slider2_is_initialized == False and image_2.status == STARTED:
            slider2.markerPos = slider.markerPos
            try:
                slider2.marker.setColor(col, colorSpace='rgb')
                slider2.marker.size = (0.05, 0.05)
                slider2_is_initialized = True
                slider2._onChange(True)()
                slider2._setupSlider()
                slider2.draw()
                slider2.setAutoDraw(True)
            except:
                print("An exception while initializing slider 2 occurred")


        # Compute opacities
        if opacity1<1 and not img2start:
            opacity1 = (timer1.getTime())/5
        elif opacity2<1 and img2start:
            opacity2 = (timer2.getTime())/5

        # Detect if we moved the marker
        if not img2start and slider.marker.contains(mouse) and mouse.getPressed()[0] == True:
            startingPos1 = False

        # Get keys
        keys = event.getKeys()

        # Moving slider using arrowKeys
        if not img2start and 'up' in keys:
            slider.markerPos += 10
            slider.recordRating(slider.markerPos)
            startingPos1 = False
        elif not img2start and 'down' in keys:
            slider.markerPos -= 10
            slider.recordRating(slider.markerPos)
            startingPos1 = False

        #print rating next to slider before releasing the mouse
        if not img2start and not startingPos1:
            #display rating value
            val = round(slider.markerPos)
            if val>=0:
                rating_val.text = str(int(abs(val)))+txtScoreY
            else:
                rating_val.text = str(int(abs(val)))+txtScoreN

        # Detect if we moved the marker
        if img2start and slider2.marker.contains(mouse) and mouse.getPressed()[0] == True:
            startingPos2 = False
            img1stop = True

        # Moving slider using arrowKeys
        if img2start and 'up' in keys:
            slider2.markerPos += 10
            slider2.recordRating(slider2.markerPos)
            startingPos2 = False
            img1stop = True
        elif img2start and 'down' in keys:
            slider2.markerPos -= 10
            slider2.recordRating(slider2.markerPos)
            startingPos2 = False
            img1stop = True

        #print rating next to slider before releasing the mouse
        if img2start and not startingPos2:
            #display rating value
            val = round(slider2.markerPos)
            if val>=0:
                rating_val.text = str(int(abs(val)))+txtScoreY
            else:
                rating_val.text = str(int(abs(val)))+txtScoreN

        #Start img2 and img3
        if t >= 5 and image_2.status == NOT_STARTED and image_1.opacity >= 1.0:
            img2start = True
            slider2.reset()
            slider.lastrating = slider.markerPos
            timer2.reset()
            rating_val.text = ""
        elif t >= 10.0 and image_3.status == NOT_STARTED and image_2.opacity >= 1.0:
            img3start = True
            img1stop = True
      Each JS Frame:
        function InitializeSlider1(){
             try {
                slider._skin.STANDARD.MARKER_COLOR = col;
                slider._skin.MARKER_SIZE = [0.05, 0.05];
                slider.markerPos = 0;
                slider._onChange(true)();
                //slider._setupSlider();
            } catch (err) {}
            slider1_is_initialized  = true;
        }

        //Initialize slider 2
        function InitializeSlider2(){
            try {
                slider2._skin.STANDARD.MARKER_COLOR = col;
                slider2._skin.MARKER_SIZE = [0.05, 0.05];
                slider2._onChange(true)();
                //slider2._setupSlider();
                slider2.draw();
                slider2.setAutoDraw(true);
            } catch (err) {}
            slider2_is_initialized  = true;
        }

        //Initialize slider1 marker at 0 position
        if (!slider1_is_initialized && image_1.status === STARTED){
            InitializeSlider1();
        }

        //Initialize slider2 marker at slider1 marker position
        if (!slider2_is_initialized && image_2.status === STARTED){
            slider2.markerPos = slider.lastrating;
            InitializeSlider2();
        }

        // Compute opacities
        if(opacity1<1 && !img2start){
            opacity1 = (timer1.getTime())/5;
        }
        else if(opacity2<1 && img2start){
            opacity2 = (timer2.getTime())/5;
        }

        //Detect if we moved the marker using mouse position
        if (startingPos1 && !img2start && mouse.getPressed()[0] === 1 && mouse.getPos()[0] >= 0.475 && mouse.getPos()[0] <= 0.525 && mouse.getPos()[1] >= -0.25 && mouse.getPos()[1] <= 0.25){
            startingPos1 = false;
        }

        // Get keys
        let keys = kb.getKeys({keyList: ["up", "down"], waitRelease: false, clear: true});
        let key_name = "";
        let key_duration = "";

        function movingSlider1WArrowKeys(mySlider){
            if (!img2start && key_name === "up" && key_duration == undefined){
                mySlider.markerPos += 10;
                mySlider.recordRating(mySlider.markerPos);
                startingPos1 = false;
            }

            else if (!img2start && key_name === "down" && key_duration == undefined){
                mySlider.markerPos -= 10;
                mySlider.recordRating(mySlider.markerPos);
                startingPos1 = false;
            }
        }

        if (keys.length > 0){
            key_name = keys[0].name;
            key_duration = keys[0].duration;
            movingSlider1WArrowKeys(slider);
        }

        // print rating next to slider before releasing the mouse
        if (!img2start && !startingPos1) {
            // display rating value
            val = Math.round(slider.markerPos)
            rating_val.text = val >= 0 ? Math.abs(val)+txtScoreY : Math.abs(val)+txtScoreN;
        }

        if (startingPos2 && img2start && mouse.getPressed()[0] === 1 && mouse.getPos()[0] >= 0.475 && mouse.getPos()[0] <= 0.525 && mouse.getPos()[1] >= -0.25 && mouse.getPos()[1] <= 0.25){
            startingPos2 = false;
            img1stop = true;
        }

        function movingSlider2WArrowKeys(mySlider){
            if (img2start && key_name === "up" && key_duration == undefined){
                mySlider.markerPos += 10;
                mySlider.recordRating(mySlider.markerPos);
                startingPos2 = false;
                img1stop = true;
            }

            else if (img2start && key_name === "down" && key_duration == undefined){
                mySlider.markerPos -= 10;
                mySlider.recordRating(mySlider.markerPos);
                startingPos2 = false;
                img1stop = true;
            }
        }

        if (keys.length > 0){
            key_name = keys[0].name;
            key_duration = keys[0].duration;
            movingSlider2WArrowKeys(slider2);
        }

        //Save rating of slider_pr on img2
        if (img2start && !startingPos2) {
            // display rating value
            val = Math.round(slider2.markerPos)
            rating_val.text = val >= 0 ? Math.abs(val)+txtScoreY : Math.abs(val)+txtScoreN;
        }

        //Start img2 and img3
        if (t >= 5.0 && image_2.status === NOT_STARTED && image_1.opacity >= 1) {
            img2start = true;
            //slider2.reset();
            slider.lastrating = slider.markerPos;
            timer2.reset();
            rating_val.text = "";
        } else {
            if (t >= 10.0 && image_3.status === NOT_STARTED && image_2.opacity >= 1) {
                img3start = true;
                img1stop = true;
            }
        }
      End JS Routine:
        // Save images times
        psychoJS.experiment.addData('image_1.started', image_1.tStart);
        psychoJS.experiment.addData('image_1.stopped', image_1.tStop);
        if (slider.getRT() != null && image_1.tStart != null){
            psychoJS.experiment.addData('image_1.rt', slider.getRT()-image_1.tStart);
        }
        else{
            psychoJS.experiment.addData('image_1.rt', '');
        }
        psychoJS.experiment.addData('image_2.started', image_2.tStart);
        psychoJS.experiment.addData('image_2.stopped', image_2.tStop);
        if (slider2.getRT() != null && image_2.tStart != null){
            psychoJS.experiment.addData('image_2.rt', slider2.getRT()-image_2.tStart);
        }
        else{
            psychoJS.experiment.addData('image_2.rt', '');
        }
        psychoJS.experiment.addData('image_3.started', image_3.tStart);
        psychoJS.experiment.addData('image_3.stopped', image_3.tStop);

        // Save additionals data

        //condition_type
        condition_type = (condition[0] === condition[1]) ? 'confirm' : 'disconfirm';
        psychoJS.experiment.addData('condition_type', condition_type);

        //response_condition
        response_condition = (slider.getRating() == null || slider2.getRating() == null) ? '' :
        (slider.getRating() < 0 && slider2.getRating() <= slider.getRating()) ? 'NN' :
        (slider.getRating() < 0 && slider2.getRating() > slider.getRating()) ? 'NY' :
        (slider.getRating() > 0 && slider2.getRating() < slider.getRating()) ? 'YN' :
        (slider.getRating() > 0 && slider2.getRating() >= slider.getRating()) ? 'YY' : 'ERROR';
        psychoJS.experiment.addData('response_condition', response_condition);

        // match and answered trial
        match = (condition && response_condition && condition == response_condition) ? 1 :
        (condition && response_condition && condition != response_condition) ? 0 : "";
        psychoJS.experiment.addData('match', match);
        answeredTrial = (match.toString().length === 0) ? 0 : 1;
        psychoJS.experiment.addData('answeredTrial', answeredTrial);

        // degree_change
        degree_change = (slider.getRating() == null || slider2.getRating() == null) ? "" :
        Math.abs(slider.getRating()-slider2.getRating());
        psychoJS.experiment.addData('degree_change', degree_change);

        thisExp.addData('currentTrial', currentTrial);
        currentTrial = currentTrial + 1;

        kb.clock.reset();
        kb.stop();
        kb.clearEvents();
      End Routine:
        # Save images times
        thisExp.addData('image_1.started', image_1.tStart)
        thisExp.addData('image_1.stopped', image_1.tStop)
        if slider.getRT() != None and image_1.tStart != None:
            thisExp.addData('image_1.rt', slider.getRT()-image_1.tStart)
        else:
            thisExp.addData('image_1.rt', '')
        thisExp.addData('image_2.started', image_2.tStart)
        thisExp.addData('image_2.stopped', image_2.tStop)
        if slider2.getRT() != None and image_2.tStart != None:
            thisExp.addData('image_2.rt', slider2.getRT()-image_2.tStart)
        else:
            thisExp.addData('image_2.rt', '')
        thisExp.addData('image_3.started', image_3.tStart)
        thisExp.addData('image_3.stopped', image_3.tStop)

        # Save additionals data

        # condition_type
        condition_type = ''

        if condition == condition[::-1]:
            condition_type = 'confirm'
        else:
            condition_type = 'disconfirm'
        thisExp.addData('condition_type', condition_type)

        # response_condition
        response_condition = ''

        if slider.getRating() is None or slider2.getRating() is None:
            response_condition = ''
        elif slider.getRating() < 0 and slider2.getRating() <= slider.getRating():
            response_condition = 'NN'
        elif slider.getRating() < 0 and slider2.getRating() > slider.getRating():
            response_condition = 'NY'
        elif slider.getRating() > 0 and slider2.getRating() < slider.getRating():
            response_condition = 'YN'
        elif slider.getRating() > 0 and slider2.getRating() >= slider.getRating():
            response_condition = 'YY'
        thisExp.addData('response_condition', response_condition)

        # match and answered trial
        match = ''
        answeredTrial = 0

        if condition and response_condition and condition == response_condition:
            match = 1
            answeredTrial = 1
        elif condition and response_condition and condition != response_condition:
            match = 0
            answeredTrial = 1
        thisExp.addData('match', match)
        thisExp.addData('answeredTrial', answeredTrial)

        # degree_change
        degree_change = ''

        if slider.getRating() is None or slider2.getRating() is None:
            degree_change = ''
        else:
            degree_change = abs(slider.getRating()-slider2.getRating())
        thisExp.addData('degree_change', degree_change)

        thisExp.addData('currentTrial', currentTrial)
        currentTrial = currentTrial + 1
    TextComponent text_1
      color = $[-1,-1,-1]
      durationEstim = 5
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [condition] = $img2start == 1
      text [set every repeat] = $txt_1
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    TextComponent text_2
      color = $[-1,-1,-1]
      durationEstim = 5
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startEstim = 5
      startVal [condition] = $img2start == 1
      stopVal [condition] = $img3start == 1
      text [set every repeat] = $txt_2
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    TextComponent text_3
      color = $[-1,-1,-1]
      durationEstim = 1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startEstim = 10
      startVal [condition] = $img3start == 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $txt_3
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    ImageComponent image_1
      image [set every repeat] = $img_1
      interpolate = nearest
      opacity [set every frame] = opacity1
      size = (0.6, 0.6)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
      texture resolution = 512
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    ImageComponent image_2
      durationEstim = 6
      image [set every repeat] = $img_2
      interpolate = nearest
      opacity [set every frame] = opacity2
      size = (0.6, 0.6)
      startEstim = 5
      startVal [condition] = $img2start == 1
      stopVal [condition] = $img3start == 1
      texture resolution = 512
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    ImageComponent image_3
      durationEstim = 1
      image [set every repeat] = $img_3
      interpolate = nearest
      size = (0.6, 0.6)
      startEstim = 10
      startVal [condition] = $img3start == 1
      stopVal [duration (s)] = 1
      texture resolution = 512
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    SliderComponent slider
      borderColor = black
      color = black
      durationEstim = 5
      fillColor = black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.5,0)
      size = (0.05, 0.45)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [condition] = $img1stop == 1
      storeHistory = True
      styles = ['rating']
      ticks = (-100, 0, 100)
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    SliderComponent slider2
      borderColor = black
      color = black
      durationEstim = 5
      fillColor = black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.5,0)
      size = (0.05, 0.45)
      startEstim = 5
      startVal [condition] = $img2start == 1
      stopVal [condition] = $img3start == 1
      storeHistory = True
      styles = ['rating']
      ticks = (-100, 0, 100)
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    TextComponent label1
      color = $[-1,-1,-1]
      durationEstim = 10
      letterHeight = 0.035
      pos = (0.5, 0.266)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
      text = 100% YES
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    TextComponent label2
      color = $[-1,-1,-1]
      durationEstim = 10
      letterHeight = 0.035
      pos = (0.5, -0.266)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
      text = 100% NO
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    TextComponent rating_val
      color = $[-1,-1,-1]
      durationEstim = 10
      letterHeight = 0.035
      pos [set every repeat] = preview_pos
      saveStartStop = False
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
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    MouseComponent mouse
      clickable = slider, slider2
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $img3start == 1
      timeRelativeTo = routine
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  Routine thanks
    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        //Change the text according to the selected language, function SetTxtThx()
        function SetTxtThx(){
            if (english){
                thx.text = "Thank you for your participation!";
            }
            else{
                thx.text = "Merci de votre participation!";
            }
        }

        // Compute additional scores, save them to the data file and send them to Redcap
        function GetData(){
            try{
                let data = thisExp._trialsData;

                /* Make array objects all have the same keys */
                let defaults = { "Language" : "", "participant" : "", "date" : "", "session": "", "expName:":"",
                "psychopyVersion": "", "OS": "", "frameRate": "", "slider.response": "", "slider.rt": "",
                "slider2.response": "", "slider2.rt": "", "mouse_i.x": "", "mouse_i.y": "", "mouse_i.leftButton": "",
                "mouse_i.midButton": "", "mouse_i.rightButton": "", "mouse_i.time": "", "mouse_i.clicked_name": "",
                "mouse_i2.x": "", "mouse_i2.y": "", "mouse_i2.leftButton": "", "mouse_i2.midButton": "",
                "mouse_i2.rightButton": "", "mouse_i2.time": "", "mouse_i2.clicked_name": "","slider_pr.response": "",
                "slider_pr.rt": "", "slider_pr.history": "", "slider_pr2.response": "", "slider_pr2.rt": "",
                "slider_pr2.history": "", "mouse_pr.x": "", "mouse_pr.y": "", "mouse_pr.leftButton": "",
                "mouse_pr.midButton": "", "mouse_pr.rightButton": "", "mouse_pr.time": "", "mouse_pr.clicked_name": "",
                "image_1.started": "","image_1.stopped": "", "image_1.rt": "","image_2.started": "",
                "image_2.stopped": "", "image_2.rt": "", "image_3.started": "", "image_3.stopped": "",
                "condition_type": "", "response_condition": "", "match": "", "answeredTrial": "", "degree_change": "",
                "currentTrial": "", "mouse.x": "", "mouse.y": "", "mouse.leftButton": "", "mouse.midButton": "",
                "mouse.rightButton": "", "mouse.time": "", "mouse.clicked_name": "",
                "slider.history": "", "slider2.history": ""};

                data = $.map( data, function( item ){
                    return $.extend( {}, defaults, item );
                });

                // Rename "index" key to avoid errors
                data = data.map(elem => {
                    elem.given_index = elem.index;
                    delete elem.index;
                    return elem;
                });

                // Create all the variables we will need
                let data2 = ["percent_trials_considered", "acc_confirm", "acc_disconfirm", "total_acc",
                "ratingchg_correctC", "ratingchg_correctD", "ratingchg_incorrectC",
                "ratingchg_incorrectD","total_ratingchg", "rt_correctC", "rt_correctD",
                "rt_incorrectC","rt_incorrectD", "total_rt"];

                for (let i = 0; i < data2.length; i++) {
                    data[data2[i]] = "";
                }

                // Create our dataframe where we will compute all the values

                let df1 = new dfd.DataFrame(data);

                // Count rows where match or deg change is empty so we can compute the pourcentage of trials answered
                let df1_answered_trials = df1.loc({
                    rows: df1["answeredTrial"].eq(1)
                });

                let df1_not_answered_trials = df1.loc({
                    rows: df1["answeredTrial"].eq(0)
                });

                let nb_answered_trials = df1_answered_trials.$data.length;
                let nb_trials = nb_answered_trials+df1_not_answered_trials.$data.length;

                // Remove rows where match or deg change is empty so that it won't perturn means
                df1 = df1.loc({
                    rows: df1["answeredTrial"].eq(1)
                });
                df1.resetIndex({ inplace: true });

                // We will compute the scores

                let sub_df_confirm = df1.loc({
                    rows: df1["condition_type"].eq("confirm")
                });

                let sub_df_disconfirm = df1.loc({
                    rows: df1["condition_type"].eq("disconfirm")
                });

                let sub_df_confirm_match, sub_df_confirm_nomatch, sub_df_disconfirm_match, sub_df_disconfirm_nomatch;
                sub_df_confirm_match = sub_df_confirm_nomatch = sub_df_disconfirm_match = sub_df_disconfirm_nomatch = new dfd.DataFrame([]);

                // If we have confirm and disconfirm trials
                if (sub_df_confirm.size>0){
                    sub_df_confirm_match = sub_df_confirm.loc({
                        rows: sub_df_confirm["match"].eq(1)
                    });

                    sub_df_confirm_nomatch = sub_df_confirm.loc({
                        rows: sub_df_confirm["match"].eq(0)
                    });
                }
                if (sub_df_disconfirm.size>0){
                    sub_df_disconfirm_match = sub_df_disconfirm.loc({
                        rows: sub_df_disconfirm["match"].eq(1)
                    });
                    sub_df_disconfirm_nomatch = sub_df_disconfirm.loc({
                        rows: sub_df_disconfirm["match"].eq(0)
                    });
                }


                // Compute means only when it is possible and we don't have empty values (no matches found or no degree changes)
                df1["percent_trials_considered"] = (nb_answered_trials/nb_trials)*100;
                df1["acc_confirm"] = (sub_df_confirm["match"] == null || sub_df_confirm["match"].$data.length == 0) ? "" : sub_df_confirm["match"].mean();
                df1["acc_disconfirm"] = (sub_df_disconfirm["match"] == null || sub_df_disconfirm["match"].$data.length == 0) ? "" : sub_df_disconfirm["match"].mean();
                df1["total_acc"] = (df1["match"] == null || df1["match"].$data.length == 0) ? "" : df1["match"].mean();
                df1["ratingchg_correctC"] = (sub_df_confirm_match["degree_change"] == null || sub_df_confirm_match["degree_change"].$data.length == 0) ? "" : sub_df_confirm_match["degree_change"].mean();
                df1["ratingchg_correctD"] = (sub_df_disconfirm_match["degree_change"] == null || sub_df_disconfirm_match["degree_change"].$data.length == 0) ? "" : sub_df_disconfirm_match["degree_change"].mean();
                df1["ratingchg_incorrectC"] = (sub_df_confirm_nomatch["degree_change"] == null || sub_df_confirm_nomatch["degree_change"].$data.length == 0) ? "" : sub_df_confirm_nomatch["degree_change"].mean();
                df1["ratingchg_incorrectD"] = (sub_df_disconfirm_nomatch["degree_change"] == null || sub_df_disconfirm_nomatch["degree_change"].$data.length == 0) ? "" : sub_df_disconfirm_nomatch["degree_change"].mean();
                df1["total_ratingchg"] = (df1["degree_change"] == null || df1["degree_change"].$data.length == 0) ? "" : df1["degree_change"].mean();
                df1["rt_correctC"] = (sub_df_confirm_match["slider2.rt"] == null || sub_df_confirm_match["slider2.rt"].$data.length == 0) ? "" : sub_df_confirm_match["slider2.rt"].mean();
                df1["rt_correctD"] = (sub_df_disconfirm_match["slider2.rt"] == null || sub_df_disconfirm_match["slider2.rt"].$data.length == 0) ? "" : sub_df_disconfirm_match["slider2.rt"].mean();
                df1["rt_incorrectC"] = (sub_df_confirm_nomatch["slider2.rt"] == null || sub_df_confirm_nomatch["slider2.rt"].$data.length == 0) ? "" : sub_df_confirm_nomatch["slider2.rt"].mean();
                df1["rt_incorrectD"] = (sub_df_disconfirm_nomatch["slider2.rt"] == null || sub_df_disconfirm_nomatch["slider2.rt"].$data.length == 0) ? "" : sub_df_disconfirm_nomatch["slider2.rt"].mean();
                df1["total_rt"] = (df1["slider2.rt"] == null || df1["slider2.rt"].$data.length == 0) ? "" : df1["slider2.rt"].mean();

                //df1.print();
                //console.log("new dataframe: ", df1);

                let taskVersion = "Online_v3.0.3"; // Version of the task

                const exp_name = "BADE_images";

                df1["date_exp"] = startingDate;
                df1["task_version"] = taskVersion;

                // Save dataframe inside the logfile
                psychoJS.experiment.addData('date_exp', df1["date_exp"]);
                psychoJS.experiment.addData('task_version', df1["task_version"]);
                psychoJS.experiment.addData('percent_trials_considered', df1["percent_trials_considered"]);
                psychoJS.experiment.addData('acc_confirm', df1["acc_confirm"]);
                psychoJS.experiment.addData('acc_disconfirm', df1["acc_disconfirm"]);
                psychoJS.experiment.addData('total_acc', df1["total_acc"]);
                psychoJS.experiment.addData('ratingchg_correctC', df1["ratingchg_correctC"]);
                psychoJS.experiment.addData('ratingchg_correctD', df1["ratingchg_correctD"]);
                psychoJS.experiment.addData('ratingchg_incorrectC', df1["ratingchg_incorrectC"]);
                psychoJS.experiment.addData('ratingchg_incorrectD', df1["ratingchg_incorrectD"]);
                psychoJS.experiment.addData('total_ratingchg', df1["total_ratingchg"]);
                psychoJS.experiment.addData('rt_correctC', df1["rt_correctC"]);
                psychoJS.experiment.addData('rt_correctD', df1["rt_correctD"]);
                psychoJS.experiment.addData('rt_incorrectC', df1["rt_incorrectC"]);
                psychoJS.experiment.addData('rt_incorrectD', df1["rt_incorrectD"]);
                psychoJS.experiment.addData('total_rt', df1["total_rt"]);

                return df1;
            }
            catch(err) {
              console.log("Error while computing the scores.");
              dumpError(err);
            }
        }

        function REDCapImportRecord(df1) {
            try{
              const url = 'https://portal.rimuhc.ca/cim/redcap/api/';
              let testdata;
              // Warning: If we add or remove columns in the Google file, we must also change the variables here
              testdata = [{
                        record_id: df1.loc({rows: [0], columns: ["participant"]}).values[0][0],
                        [redcapVars[1]]: df1.loc({rows: [0], columns: ["session"]}).values[0][0],
                        [redcapVars[2]]: df1["date_exp"],
                        [redcapVars[3]]: df1["task_version"],
                        [redcapVars[4]]: df1["percent_trials_considered"],
                        [redcapVars[5]]: df1["acc_confirm"],
                        [redcapVars[6]]: df1["acc_disconfirm"],
                        [redcapVars[7]]: df1["total_acc"],
                        [redcapVars[8]]: df1["ratingchg_correctC"],
                        [redcapVars[9]]: df1["ratingchg_correctD"],
                        [redcapVars[10]]: df1["ratingchg_incorrectC"],
                        [redcapVars[11]]: df1["ratingchg_incorrectD"],
                        [redcapVars[12]]: df1["total_ratingchg"],
                        [redcapVars[13]]: df1["rt_correctC"],
                        [redcapVars[14]]: df1["rt_correctD"],
                        [redcapVars[15]]: df1["rt_incorrectC"],
                        [redcapVars[16]]: df1["rt_incorrectD"],
                        [redcapVars[17]]: df1["total_rt"]
              }];

              testdata = JSON.stringify(testdata);
              //console.log("testdata: ", testdata);

              const body = new FormData();
              body.append('token', redcapVars[0]);
              body.append('content', 'record');
              body.append('format', 'json');
              body.append('overwriteBehavior', 'normal');
              body.append('data', testdata);
              body.append('returnContent', 'ids');

              const params = {
                method: 'POST',
                body,
              }

            return fetch(url, params)
              .then(data => {
                console.log('fetch data: ', data)
              })
              .catch(error => console.log('Error: ', error))

            }
            catch(err) {
              console.log("Error while sending data to redcap: ", err.message);
              dumpError(err);
            }
        }

        function dumpError(err) {
          if (typeof err === 'object') {
            if (err.message) {
              console.log('\nMessage: ' + err.message);
            }
            if (err.stack) {
              console.log('\nStacktrace:');
              console.log('====================');
              console.log(err.stack);
            }
          } else {
            console.log('dumpError :: argument is not an object');
          }
        }

        //Call functions
        SetTxtThx();
        var res = GetData();
        REDCapImportRecord(res);
      Begin Routine:
        import traceback

        #Change the text according to the selected language, function SetTxtInstr2()
        if english:
            thx.text = "Thank you for your participation!"
        else:
            thx.text = "Merci de votre participation!"

        # DATA COMPUTATIONS
        #Get Data
        try:
            df1 = pd.DataFrame.from_dict(thisExp.getAllEntries())

            # Create all the variables we will need
            df1 = df1.assign(percent_trials_considered="",acc_confirm="",acc_disconfirm="",total_acc="",ratingchg_correctC="",ratingchg_correctD="",ratingchg_incorrectC="",ratingchg_incorrectD="",total_ratingchg="",rt_correctC="",rt_correctD="",rt_incorrectC="",rt_incorrectD="",total_rt="")

            #print("df1", df1)
            #print("df1 shape: ", df1.shape)

            # Compute the number of answered trials
            nb_answered_trials = len(df1.query('answeredTrial == 1'))
            nb_not_answered_trials = len(df1.query('answeredTrial == 0'))
            nb_trials = nb_answered_trials+nb_not_answered_trials

            # Select only answered trials so that it won't perturn means
            df1 = df1.query('answeredTrial == 1')
            df1.reset_index(drop=True, inplace=True) #indexing was a concern in some calculations.

            #We will now compute the scores
            df1["percent_trials_considered"] = (nb_answered_trials/nb_trials)*100
            df1["acc_confirm"] = df1.query('condition_type == "confirm"')['match'].mean()
            df1["acc_disconfirm"] = df1.query('condition_type == "disconfirm"')['match'].mean()
            df1["total_acc"] = df1['match'].mean()
            df1["ratingchg_correctC"] = df1.query('condition_type == "confirm" & match == 1')['degree_change'].mean()
            df1["ratingchg_correctD"] = df1.query('condition_type == "disconfirm" & match == 1')['degree_change'].mean()
            df1["ratingchg_incorrectC"] = df1.query('condition_type == "confirm" & match == 0')['degree_change'].mean()
            df1["ratingchg_incorrectD"] = df1.query('condition_type == "disconfirm" & match == 0')['degree_change'].mean()
            df1["total_ratingchg"] = df1['degree_change'].mean()
            df1["rt_correctC"] = df1.query('condition_type == "confirm" & match == 1')['slider2.rt'].mean()
            df1["rt_correctD"] = df1.query('condition_type == "disconfirm" & match == 1')['slider2.rt'].mean()
            df1["rt_incorrectC"] = df1.query('condition_type == "confirm" & match == 0')['slider2.rt'].mean()
            df1["rt_incorrectD"] = df1.query('condition_type == "disconfirm" & match == 0')['slider2.rt'].mean()
            df1["total_rt"] = df1['slider2.rt'].mean()

            # If we could not compute mean because we had empty values (no matches found or no degree changes) then we may have nan results
            # Replace nan results by empty string
            df1 = df1.fillna('')

            #print("df1", df1)
            #print("df1 shape: ", df1.shape)

            # Save task version and date
            taskVersion = "Offline_v3.0.3"
            df1["date_exp"] = startingDate
            df1["task_version"] = taskVersion

            thisExp.addData('date_exp', df1["date_exp"].iloc[0])
            thisExp.addData('task_version', df1["task_version"].iloc[0])
            thisExp.addData('percent_trials_considered', df1["percent_trials_considered"].iloc[0])
            thisExp.addData('acc_confirm', df1["acc_confirm"].iloc[0])
            thisExp.addData('acc_disconfirm', df1["acc_disconfirm"].iloc[0])
            thisExp.addData('total_acc', df1["total_acc"].iloc[0])
            thisExp.addData('ratingchg_correctC', df1["ratingchg_correctC"].iloc[0])
            thisExp.addData('ratingchg_correctD', df1["ratingchg_correctD"].iloc[0])
            thisExp.addData('ratingchg_incorrectC', df1["ratingchg_incorrectC"].iloc[0])
            thisExp.addData('ratingchg_incorrectD', df1["ratingchg_incorrectD"].iloc[0])
            thisExp.addData('total_ratingchg', df1["total_ratingchg"].iloc[0])
            thisExp.addData('rt_correctC', df1["rt_correctC"].iloc[0])
            thisExp.addData('rt_correctD', df1["rt_correctD"].iloc[0])
            thisExp.addData('rt_incorrectC', df1["rt_incorrectC"].iloc[0])
            thisExp.addData('rt_incorrectD', df1["rt_incorrectD"].iloc[0])
            thisExp.addData('total_rt', df1["total_rt"].iloc[0])
        except Exception:
            print("An exception occurred. Error while computing scores.")
            traceback.print_exc()

        # Send data to redcap
        try:
            import requests, hashlib
            # Transform data to JSON Format
            # If we add or remove columns in the Google file, we must also change the variables here
            myDict = {}
            myDict["record_id"] = df1['participant'].iloc[0]
            myDict[redcapVars[1]] = df1['session'].iloc[0]
            myDict[redcapVars[2]] = df1['date_exp'].iloc[0]
            myDict[redcapVars[3]] = df1['task_version'].iloc[0]
            myDict[redcapVars[4]] = df1['percent_trials_considered'].iloc[0]
            myDict[redcapVars[5]] = df1['acc_confirm'].iloc[0]
            myDict[redcapVars[6]] = df1['acc_disconfirm'].iloc[0]
            myDict[redcapVars[7]] = df1['total_acc'].iloc[0]
            myDict[redcapVars[8]] = df1['ratingchg_correctC'].iloc[0]
            myDict[redcapVars[9]] = df1['ratingchg_correctD'].iloc[0]
            myDict[redcapVars[10]] = df1['ratingchg_incorrectC'].iloc[0]
            myDict[redcapVars[11]] = df1['ratingchg_incorrectD'].iloc[0]
            myDict[redcapVars[12]] = df1['total_ratingchg'].iloc[0]
            myDict[redcapVars[13]] = df1['rt_correctC'].iloc[0]
            myDict[redcapVars[14]] = df1['rt_correctD'].iloc[0]
            myDict[redcapVars[15]] = df1['rt_incorrectC'].iloc[0]
            myDict[redcapVars[16]] = df1['rt_incorrectD'].iloc[0]
            myDict[redcapVars[17]] = df1['total_rt'].iloc[0]

            data_to_send = [myDict]

            #print("data to send: ", data_to_send)

            url = 'https://portal.rimuhc.ca/cim/redcap/api/'
            redcap_data = {
                'token': redcapVars[0],
                'content': 'record',
                'format': 'json',
                'type': 'flat',
                'overwriteBehavior': 'normal',
                'forceAutoNumber': 'false',
                'data': json.dumps(data_to_send),
                'returnContent': 'ids',
                'returnFormat': 'json',
                'record_id': hashlib.sha1().hexdigest()[:17]
            }
            x = requests.post(url, data = redcap_data)
            print(x.text)
            print("data sent to redcap")
        except Exception:
            print("An exception occurred. Error while sending data to redcap.")
            traceback.print_exc()
    TextComponent thx
      color = $[-1,-1,-1]
      durationEstim = 2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for your participation!
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  Routine ready
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        //Change the text according to the selected language, function SetTxtInstr2()
        function SetTxtReady(){
            if (english){
                ready_2.text = "Ready to begin?";
                txt_next_3.text = "BEGIN";
            }
            else{
                ready_2.text = "Prêt à commencer ?";
                txt_next_3.text = "COMMENCER";
            }
        }
        SetTxtReady();
      Begin Routine:
        #Change the text according to the selected language, function SetTxtInstr2()
        if english:
            ready_2.text = "Ready to begin?"
            txt_next_3.text = "BEGIN"
        else:
            ready_2.text = "Prêt à commencer ?"
            txt_next_3.text = "COMMENCER"
      Each Frame:
        #Change the color of highlighed rect
        if next_3.contains(mouse_3):
                next_3.opacity=0.99
                txt_next_3.opacity=2
        else:
                next_3.opacity=0.73
                txt_next_3.opacity=0.73
      Each JS Frame:
        //Change the color of highlighed rect
        function HighlightRect(rec1, txt_rec1, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
        }

        HighlightRect(next_3, txt_next_3, mouse_3);
    TextComponent ready_2
      color = $[-1,-1,-1]
      durationEstim = 2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ready to begin?
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    ImageComponent next_3
      image = button.png
      opacity = 0.73
      pos = (0, -0.12)
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent txt_next_3
      color = $[-1,-1,-1]
      letterHeight = 0.023
      opacity = 0.73
      pos [set every repeat] = next_3.pos
      startVal [time (s)] = 0.0
      text = BEGIN
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    MouseComponent mouse_3
      clickable = next_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine lang
    CodeComponent code_2
      Code Type = Both
      Before JS Experiment:
        /*
        Use danfos to convert the data into dataframe
        We will be able to make calculations on the data more easily
        and in a clearer way for a future reading of the code.
        The calculations are also similar to those with Python and Pandas,
        so it is less work.
        */

        var danfosUrl = 'resources/bundle.min.js';

        function dynamicallyLoadScript(url) {
            var script = document.createElement("script");  // create a script DOM node
            script.src = url;  // set its src to the provided URL

            document.head.appendChild(script);  // add it to the end of the head section of the page (could change 'head' to 'body' to add it to the end of the body section instead)
        }

        dynamicallyLoadScript(danfosUrl);
      Begin Experiment:
        import re
        import pandas as pd
        import os, ssl
        import json
        import datetime

        #Initialize starting date
        startingDate = datetime.datetime.now().strftime("%Y-%m-%d %H:%M")

        #Initialize variables to change the color of highlighed rect
        red = "red";

        #Set french or english variable to true when the language is selected
        french = False
        english = False

        trialConditions = ""
        practiceConditions = ""
        redcapVars = []

        #Remove illegal characters in participants' name to avoid errors in filenames
        expInfo['participant'] = re.sub('[^\w_.)( -]', '', expInfo['participant'])

        #Load redcap variable
        if not os.environ.get('PYTHONHTTPSVERIFY', '') and getattr(ssl, '_create_unverified_context', None):
            try:
                ssl._create_default_https_context = ssl._create_unverified_context
                sheet_url = "https://docs.google.com/spreadsheets/d/1HKhUnueu7nKidtb37oh2HPwGXNgj5b4i6DsxrUrUOCM/edit#gid=489716065"
                url_1 = sheet_url.replace('/edit#gid=', '/export?format=csv&gid=')
                dfRed = pd.read_csv(url_1)
                nbCol = 19 #Change it if we change the google sheet
                for i in range(1, nbCol):
                    redcapVars.append(dfRed.iloc[0,i])
            except:
                print("An exception occurred. The redcap variables could not be found.")
      Begin JS Experiment:
        // Initialize starting date
        date1 = new Date().toLocaleString("en-US", {timeZone: "America/New_York"});
        d = new Date(date1);
        startingDate =  d.getFullYear() + "-" + (d.getMonth()+1) + "-" + d.getDate() + " " +
        d.getHours() + ":" + d.getMinutes();

        //Initialize variables to change the color of highlighed rect
        red = new util.Color("red");

        //Set french or english variable to true when the language is selected
        french = false;
        english = false;

        trialConditions = "";
        practiceConditions = "";
        redcapVars = [];

        //Remove illegal characters in participants' name to avoid errors in filenames
        function CheckFilename(){
           expInfo['participant']= expInfo['participant'].replace(/([^.a-z0-9]+)/gi, '-');
        }

        // Load redcap variables from Google Spreadsheet
        function LoadRedcapVars(redcapVars){
            try {
                // Retrieve data between B2 and max range
                let url = "https://docs.google.com/spreadsheets/d/e/2PACX-1vR2HrrKB78yxkxRABtTlghA1reADPaQN32V5oJ2BbRXEZOhr8YrkGDZaIVZtjqNMXWTLzeG6-xRaEBl/pub?gid=489716065&range=B2:AA2&output=csv";
                var xmlhttp = new XMLHttpRequest();
                xmlhttp.onreadystatechange = function () {
                    if (xmlhttp.readyState == 4) {
                        let array = xmlhttp.responseText.split(',');
                        for (let i = 0; i < array.length; i++) {
                            redcapVars.push(array[i]);
                        }
                    }
                };
                xmlhttp.open("GET", url, true);
                xmlhttp.send(null);
                return redcapVars;
            }
            catch(err) {
                console.log("Erreur while loading Redcap variables", err.message);
            }

        }

        CheckFilename();
        redcapVars = LoadRedcapVars(redcapVars);
      Begin JS Routine:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
      Each Frame:
        #Change the color of highlighed rect
        if rect1.contains(mouse1):
            rect1.setOpacity(0.99)
            txt_rect1.setOpacity(2)
        else:
            rect1.setOpacity(0.73)
            txt_rect1.setOpacity(0.73)

        if rect2.contains(mouse1):
            rect2.setOpacity(0.99)
            txt_rect2.setOpacity(2)
        else:
            rect2.setOpacity(0.73)
            txt_rect2.setOpacity(0.73)

        #Function that is going to set the chosen language
        if rect1.contains(mouse1) and mouse1.getPressed()[0] == True:
                french = True
                practiceConditions = "BADEImgConditions_practice_Fr.csv"
                trialConditions = "BADEImgConditions_Fr.csv"

        elif rect2.contains(mouse1) and mouse1.getPressed()[0] == True:
                english = True
                practiceConditions = "BADEImgConditions_practice_Eng.csv"
                trialConditions = "BADEImgConditions_Eng.csv"
      Each JS Frame:
        //Change the color of highlighed rect
        function HighlightRect(rec1, rec2, txt_rec1, txt_rec2, mouse) {
             if (rec1.contains(mouse)) {
                rec1.setOpacity(0.99);
                txt_rec1.setOpacity(2);
             }
            else{
                rec1.setOpacity(0.73);
                txt_rec1.setOpacity(0.73);
            }
             if (rec2.contains(mouse)) {
                rec2.setOpacity(0.99);
                txt_rec2.setOpacity(2);
             }
            else{
                rec2.setOpacity(0.73);
                txt_rec2.setOpacity(0.73);
            }
        }

        //Function that is going to set the chosen language
        function SelectLanguage(rec1, rec2, mouse){
            if (rec1.contains(mouse) && mouse.getPressed()[0] === 1 ) {
                french = true;
                practiceConditions = "BADEImgConditions_practice_Fr.csv";
                trialConditions = "BADEImgConditions_Fr.csv";
            }
            else if (rec2.contains(mouse) && mouse.getPressed()[0] === 1 ) {
                english = true;
                practiceConditions = "BADEImgConditions_practice_Eng.csv";
                trialConditions = "BADEImgConditions_Eng.csv";
            }
        }

        HighlightRect(rect1,  rect2, txt_rect1, txt_rect2, mouse1);
        SelectLanguage(rect1,  rect2, mouse1);
      End JS Routine:
        thisExp.addData("Language", english===true ? "en" : "fr");
      End Routine:
        if english==True:
            thisExp.addData("Language", "en")
        else:
            thisExp.addData("Language", "fr")
    ImageComponent rect1
      image = button.png
      opacity = 0.73
      pos = (0, 0.02)
      saveStartStop = False
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent rect2
      image = button.png
      opacity = 0.73
      pos = (0, -0.07)
      size = (0.25, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent txt_instr
      color = $[-1,-1,-1]
      letterHeight = 0.03
      pos = (0, 0.18)
      startVal [time (s)] = 0.0
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      text:
        Veuillez sélectionner votre langue.

        Please select your language.
    TextComponent txt_rect1
      color = $[-1,-1,-1]
      letterHeight = 0.023
      opacity = 0.73
      pos [set every repeat] = rect1.pos
      startVal [time (s)] = 0.0
      text = FRANÇAIS
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    TextComponent txt_rect2
      color = $[-1,-1,-1]
      letterHeight = 0.023
      opacity = 0.73
      pos [set every repeat] = rect2.pos
      startVal [time (s)] = 0.0
      text = ENGLISH
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    MouseComponent mouse1
      clickable = rect1, rect2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  Routine lang
  Routine instr
  Routine instr2
  LoopInitiator practices loopType="TrialHandler"
    conditionsFile = $practiceConditions
    loopType = sequential
    nReps = 1
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    Routine practice
  LoopTerminator practices
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $trialConditions
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine thanks
